proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create axon_0[107]

proc topol() { local i
  connect axon_0[1](0), axon_0(0.5)
  for i = 2, 8 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[9](0), axon_0(0.5)
  connect axon_0[10](0), axon_0[2](1)
  connect axon_0[11](0), axon_0[1](1)
  for i = 12, 15 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[16](0), axon_0[11](1)
  connect axon_0[17](0), axon_0[5](1)
  connect axon_0[18](0), axon_0[4](1)
  for i = 19, 22 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[23](0), axon_0[18](1)
  connect axon_0[24](0), axon_0[6](1)
  connect axon_0[25](0), axon_0[3](1)
  connect axon_0[26](0), axon_0[7](1)
  connect axon_0[27](0), axon_0[14](1)
  connect axon_0[28](0), axon_0[13](1)
  for i = 29, 32 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[33](0), axon_0[12](1)
  connect axon_0[34](0), axon_0[33](1)
  connect axon_0[35](0), axon_0[21](1)
  connect axon_0[36](0), axon_0[35](1)
  connect axon_0[37](0), axon_0[20](1)
  for i = 38, 40 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[41](0), axon_0[19](1)
  for i = 42, 43 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[44](0), axon_0[29](1)
  for i = 45, 46 connect axon_0[i](0), axon_0[44](1)
  connect axon_0[47](0), axon_0[28](1)
  for i = 48, 49 connect axon_0[i](0), axon_0[i-18](1)
  for i = 50, 51 connect axon_0[i](0), axon_0[49](1)
  connect axon_0[52](0), axon_0[33](1)
  connect axon_0[53](0), axon_0[35](1)
  for i = 54, 55 connect axon_0[i](0), axon_0[53](1)
  for i = 56, 57 connect axon_0[i](0), axon_0[i-19](1)
  for i = 58, 59 connect axon_0[i](0), axon_0[57](1)
  connect axon_0[60](0), axon_0[39](1)
  for i = 61, 62 connect axon_0[i](0), axon_0[60](1)
  for i = 63, 64 connect axon_0[i](0), axon_0[41](1)
  for i = 65, 66 connect axon_0[i](0), axon_0[64](1)
  connect axon_0[67](0), axon_0[42](1)
  connect axon_0[68](0), axon_0[44](1)
  for i = 69, 77 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[78](0), axon_0[76](1)
  connect axon_0[79](0), axon_0[74](1)
  connect axon_0[80](0), axon_0[73](1)
  for i = 81, 83 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[84](0), axon_0[68](1)
  for i = 85, 86 connect axon_0[i](0), axon_0[i-1](1)
  connect axon_0[87](0), axon_0[84](1)
  connect axon_0[88](0), axon_0[75](1)
  connect axon_0[89](0), axon_0[69](1)
  for i = 90, 91 connect axon_0[i](0), axon_0[89](1)
  connect axon_0[92](0), axon_0[72](1)
  for i = 93, 95 connect axon_0[i](0), axon_0[i-1](1)
  for i = 96, 97 connect axon_0[i](0), axon_0[i-26](1)
  for i = 98, 100 connect axon_0[i](0), axon_0[i-18](1)
  connect axon_0[101](0), axon_0[85](1)
  connect axon_0[102](0), axon_0[93](1)
  for i = 103, 104 connect axon_0[i](0), axon_0[102](1)
  connect axon_0[105](0), axon_0[94](1)
  connect axon_0[106](0), axon_0[92](1)
  basic_shape()
}
proc shape3d_1() {
  axon_0 {pt3dclear()
	pt3dadd(15.772, 16.465, 23.763, 0.3904)
	pt3dadd(15.861, 16.382, 23.749, 0.52068)
	pt3dadd(15.882, 16.287, 23.725, 0.55204)
	pt3dadd(15.893, 16.246, 23.674, 0.58238)
	pt3dadd(15.882, 16.221, 23.636, 0.55674)
	pt3dadd(15.901, 16.149, 23.594, 0.5793)
	pt3dadd(15.868, 16.147, 23.544, 0.58612)
	pt3dadd(15.847, 16.117, 23.491, 0.55256)
	pt3dadd(15.705, 16.182, 23.388, 0.62644)
	pt3dadd(15.824, 16.126, 23.29, 0.73628)
	pt3dadd(15.802, 16.158, 23.229, 0.68492)
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  }
}
proc shape3d_2() {
  axon_0[5] {	pt3dadd(14.128, 16.818, 9.3967, 0.71594)
	pt3dadd(14.09, 16.808, 9.3349, 0.66716)
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  }
}
proc shape3d_3() {
  axon_0[13] {	pt3dadd(11.594, 13.972, 11.411, 0.7657)
	pt3dadd(11.554, 13.909, 11.428, 0.7632)
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  }
}
proc shape3d_4() {
  axon_0[24] {	pt3dadd(12.574, 16.1, 7.1693, 0.30938)
	pt3dadd(12.549, 16.046, 7.1583, 0.34926)
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  }
}
proc shape3d_5() {
  axon_0[33] {	pt3dadd(11.893, 16.236, 11.772, 0.55456)
	pt3dadd(11.899, 16.177, 11.687, 0.58386)
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  }
}
proc shape3d_6() {
  axon_0[37] {	pt3dadd(16.45, 16.25, 8.85, 0.61868)
	pt3dadd(16.532, 16.173, 8.7477, 0.73732)
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  }
}
proc shape3d_7() {
  axon_0[45] {	pt3dadd(13, 11.9, 10.3, 0.217)
	pt3dadd(13.087, 11.774, 10.237, 0.21276)
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  }
}
proc shape3d_8() {
  axon_0[63] {	pt3dadd(14.95, 18.9, 8.55, 1.0075)
	pt3dadd(14.926, 19.025, 8.0446, 0.95056)
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  }
}
proc shape3d_9() {
  axon_0[72] {  }
  axon_0[73] {pt3dclear()
	pt3dadd(10.807, 11.831, 3.3883, 1.19624)
	pt3dadd(10.693, 11.888, 3.424, 1.12074)
	pt3dadd(10.617, 11.914, 3.4009, 1.06384)
	pt3dadd(10.599, 12.005, 3.4436, 1.00136)
	pt3dadd(10.541, 12.132, 3.4668, 0.91898)
	pt3dadd(10.564, 12.223, 3.4854, 0.8852)
	pt3dadd(10.513, 12.252, 3.4826, 0.8114)
	pt3dadd(10.498, 12.299, 3.5015, 0.85252)
	pt3dadd(10.3, 12.3, 3.45, 0.85876)
	pt3dadd(10.337, 12.467, 3.5479, 0.86498)
	pt3dadd(10.207, 12.487, 3.4422, 1.00422)
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  }
}
proc shape3d_10() {
  axon_0[80] {	pt3dadd(6.6014, 11.284, 2.0904, 0.7375)
	pt3dadd(6.584, 11.246, 2.114, 0.7373)
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  }
}
proc shape3d_11() {
  axon_0[92] {	pt3dadd(11.651, 12.448, 2.9, 0.24956)
	pt3dadd(11.696, 12.461, 2.9, 0.24958)
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  }
}
proc shape3d_12() {
  axon_0[98] {	pt3dadd(5.103, 10.834, 2.8089, 1.18044)
	pt3dadd(5.0405, 10.821, 2.827, 1.05456)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
}

objref all, axonal_0
proc subsets() { local i
  objref all, axonal_0
  all = new SectionList()
    for i=0, 106 axon_0[i] all.append()

  axonal_0 = new SectionList()
    for i=0, 106 axon_0[i] axonal_0.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.01*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    Ra = 130
    cm = 1.1
    insert pas
      g_pas = 4.17e-05
      e_pas = -60
  }
}
access axon_0

celldef()
