
proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create dend_0[32]

proc topol() { local i
  for i = 1, 2 connect dend_0[i](0), dend_0(0.5)
  for i = 3, 7 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[8](0), dend_0[5](1)
  connect dend_0[9](0), dend_0[3](1)
  for i = 10, 11 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[12](0), dend_0[4](1)
  connect dend_0[13](0), dend_0[6](1)
  connect dend_0[14](0), dend_0[2](1)
  for i = 15, 16 connect dend_0[i](0), dend_0[i-1](1)
  connect dend_0[17](0), dend_0[10](1)
  for i = 18, 19 connect dend_0[i](0), dend_0[17](1)
  connect dend_0[20](0), dend_0[9](1)
  connect dend_0[21](0), dend_0[20](1)
  connect dend_0[22](0), dend_0[15](1)
  connect dend_0[23](0), dend_0[22](1)
  connect dend_0[24](0), dend_0[14](1)
  connect dend_0[25](0), dend_0[24](1)
  connect dend_0[26](0), dend_0[17](1)
  connect dend_0[27](0), dend_0[20](1)
  connect dend_0[28](0), dend_0[22](1)
  connect dend_0[29](0), dend_0[24](1)
  for i = 30, 31 connect dend_0[i](0), dend_0[29](1)
  basic_shape()
}
proc shape3d_1() {
  dend_0 {pt3dclear()
	pt3dadd(15.77, 16.47, 23.76, 2.098)
	pt3dadd(15.741, 16.204, 23.82, 2.2748)
	pt3dadd(15.96, 16.2, 23.996, 2.233)
  }
  dend_0[1] {pt3dclear()
	pt3dstyle(1, 15.96, 16.2, 23.996)
	pt3dadd(16.092, 16.068, 23.996, 2.1912)
	pt3dadd(16.025, 15.737, 23.997, 2.1496)
  }
  dend_0[2] {pt3dclear()
	pt3dstyle(1, 15.96, 16.2, 23.996)
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  }
}
proc shape3d_2() {
  dend_0[10] {	pt3dadd(1.567, 24.486, 62.103, 0.396)
	pt3dadd(1.177, 24.704, 62.061, 0.49656)
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  }
}
proc shape3d_3() {
  dend_0[24] {	pt3dadd(12.203, 26.376, 61.748, 1.7479)
	pt3dadd(12.565, 26.127, 61.698, 1.19378)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
}

objref all, dendritic_0
proc subsets() { local i
  objref all, dendritic_0
  all = new SectionList()
    for i=0, 31 dend_0[i] all.append()

  dendritic_0 = new SectionList()
    for i=0, 31 dend_0[i] dendritic_0.append()

}
proc geom() {
  forsec all {  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    Ra = 130
    cm = 1.1
    insert pas
      g_pas = 4.17e-005
      e_pas = -60
  }
}

func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }

        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}
access dend_0

celldef()
